---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Nuevo experimento"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 32
set font_italic no
set font_family mono
set font_bold yes
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sketchpad Centro
	set duration 745
	set description "Muestra estímulos"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Centro_1
	set duration 745
	set description "Muestra estímulos"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Lado
	set duration 495
	set description "Muestra estímulos"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad LadoLetras
	set duration 0
	set description "Muestra estímulos"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=F x=-224 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x=224 y=0 z_index=0
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad LadoLetras_1
	set duration 0
	set description "Muestra estímulos"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text=F x=-224 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=32 html=yes show_if=always text=X x=224 y=0 z_index=0
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Lado_1
	set duration 495
	set description "Muestra estímulos"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad PuntoFijo
	set duration 745
	set description "Muestra estímulos"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad PuntoFijo_1
	set duration 745
	set description "Muestra estímulos"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sampler SonidoIncorrecto
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Reproducir un sonido en formato .wav o .ogg"

define sampler SonidoIncorrecto_1
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Reproducir un sonido en formato .wav o .ogg"

define sequence experiment
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run new_form_text_display always
	run new_loop always
	run new_feedback always
	run new_loop_1 always
	run new_feedback_1 always

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Proporciona feedback al participante"
	draw rect color="#4afff0" fill=1 h=320 penwidth=1 show_if=always w=512 x=-256.0 y=-128.0 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=15 html=yes show_if=always text="Fin del bloque de prueba!<br /><br />Tu tiempo promedio de respuesta fue [avg_rt] ms.<br /><br />Tu presición fue de [acc]%.<br /><br />Presione cualquier tecla para continuar al experimento real." x=0 y=32 z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Proporciona feedback al participante"
	draw rect color="#4afff0" fill=1 h=320 penwidth=1 show_if=always w=512 x=-256 y=-128 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=15 html=yes show_if=always text="Fin del bloque!<br /><br />Tu tiempo promedio de respuesta fue [avg_rt] ms.<br /><br />Tu presición fue de [acc]%.<br /><br />Presione cualquier tecla para continuar." x=0 y=32 z_index=0

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Intrucciones
	set form_text "Bienvenido al experimento de Gaze Cueing."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response new_keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses "F;X"

define keyboard_response new_keyboard_response_1
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses "F;X"

define loop new_loop
	set source table
	set repeat 1
	set order sequential
	set description "Corre otro objeto de forma repetida"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 gaze_cue left
	setcycle 0 correct_response F
	setcycle 1 gaze_cue right
	setcycle 1 correct_response X
	run new_sequence

define loop new_loop_1
	set source table
	set repeat 5
	set order sequential
	set description "Corre otro objeto de forma repetida"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 gaze_cue left
	setcycle 0 correct_response F
	setcycle 1 gaze_cue right
	setcycle 1 correct_response X
	run new_sequence_1

define sequence new_sequence
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run PuntoFijo always
	run Centro always
	run Lado always
	run LadoLetras always
	run new_keyboard_response always
	run SonidoIncorrecto "[correct]=0"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run PuntoFijo_1 always
	run Centro_1 always
	run Lado_1 always
	run LadoLetras_1 always
	run new_keyboard_response_1 always
	run SonidoIncorrecto_1 "[correct]=0"

