---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Sesión 1"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family "Times New Roman"
set font_bold no
set experiment_path "C:/Users/57317/Desktop/Universidad Nacional/Programación/OpenSesame/Taller"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#ffffff"

define form_text_display Instrucciones
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Pregutados
	__form_text__
	A continuación se presentará una pregunta de respuesta cerrada, es decir, solamente podrá responder sí o no:
	
	Si considera que la respuesta es sí:
	    -> Presione la letra S del teclado.
	    
	Si considera que la respuesta es no:
	    -> Presione la letra N del teclado.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run Instrucciones always
	run new_loop always
	run new_feedback always

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Proporciona feedback al participante"
	draw textline center=1 color="#000000" font_bold=yes font_family="Times New Roman" font_italic=no font_size=30 html=yes show_if=always text="Tu tiempo promedio de respuesta fue [avg_rt] ms." x=0 y=0 z_index=0

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"

define loop new_loop
	set source table
	set repeat 2
	set order random
	set description "Corre otro objeto de forma repetida"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define sequence new_sequence
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run new_sketchpad always
	run new_keyboard_response always

define sketchpad new_sketchpad
	set duration 100
	set description "Muestra estímulos"
	draw textline center=1 color="#000000" font_bold=yes font_family="Times New Roman" font_italic=no font_size=42 html=yes show_if=always text="¿Facebook es azul debido a que Mark Zuckerberg es daltónico?" x=0 y=0 z_index=0

