---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Nuevo experimento"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sketchpad CaraCentro
	set duration 750
	set description "Muestra estímulos"
	draw image center=1 file="gaze_neutral.png" scale=1.3000000000000003 show_if=always x=0 y=0 z_index=0

define sketchpad CaraIzq
	set duration 500
	set description "Muestra estímulos"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1.3 show_if=always x=0 y=0 z_index=0

define sketchpad CaraIzqLetras
	set duration 500
	set description "Muestra estímulos"
	draw image center=1 file="gaze_[gaze_cue].png" scale=1.3 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=42 html=yes show_if=always text=F x="[posicion_f]" y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=42 html=yes show_if=always text=X x="[posicion_x]" y=0 z_index=0

define sketchpad PuntoFijo
	set duration 750
	set description "Muestra estímulos"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run new_form_text_display always
	run new_loop always
	run new_logger always

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Recoge respuestas de teclado"
	set allowed_responses "f;x"

define logger new_logger
	set description "Registra datos experimentales"
	set auto_log yes

define loop new_loop
	set source table
	set repeat 2
	set order random
	set description "Corre otro objeto de forma repetida"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 gaze_cue left
	setcycle 0 posicion_x -320
	setcycle 0 posicion_f 320
	setcycle 0 correct_response x
	setcycle 1 gaze_cue right
	setcycle 1 posicion_x -320
	setcycle 1 posicion_f 320
	setcycle 1 correct_response f
	setcycle 2 gaze_cue left
	setcycle 2 posicion_x 320
	setcycle 2 posicion_f -320
	setcycle 2 correct_response f
	setcycle 3 gaze_cue right
	setcycle 3 posicion_x 320
	setcycle 3 posicion_f -320
	setcycle 3 correct_response x
	run new_sequence

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Reproducir un sonido en formato .wav o .ogg"

define sequence new_sequence
	set flush_keyboard yes
	set description "Corre un número de objetos en secuencia"
	run PuntoFijo always
	run CaraCentro always
	run CaraIzq always
	run CaraIzqLetras always
	run new_keyboard_response always
	run new_sampler "[correct]=0"

